PsychoPy2experiment version="2022.2.4"
Settings
  Completed URL = $"https://gmu.sona-systems.com/webstudy_credit.aspx?experiment_id=1760&credit_token=c1298fa7e1074d19bd4b592810329a87&survey_code=" + expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = cm
  Window size (pixels) = [2048, 1152]
  expName = time_memorability_test
  eyetracker = Tobii Technology
  keyboardBackend = ioHub
  logging level = debug
  tbModel = X60
  tbSampleRate = 60
  tbSerialNo = TX060-301-30700235
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Routines
  Routine begin
    TextComponent start_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        For each trial, you'll start by staring at a point for half a second. Afterwards, a picture will pop up on screen for a specific amount of time. As fast and accurately as you can, press the 'left arrow key' if the image was shown for a short amount of time and the 'right arrow key' if it was long.

        You will complete 5 blocks, each seperated by a break.

        You'll start each block by calibrating the eye tracker.
    TextComponent text_2
      color = green
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press the Space Bar to begin
      units = height
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image
    ImageComponent Scene
      image [set every repeat] = $ImagePath
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur
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    CodeComponent code_5
      Code Type = Py
      Each Frame:
        line = []
        if(etRecord.pos is not None):
            line.append(etRecord.pos)
            line.append(eyetracker.getLastSample()[21])
            line.append(eyetracker.getLastSample()[40])

        if (line):
            line.append('image')
        else:
            line = ['None', 'None', 'None', 'None', 'image']
        line.append(trials.thisN + 1)
        line.append(block_num)
        line.append(blockClock.getTime())

        f.write(", ".join(str(i) for i in line))
        f.write('\n')
  Routine response
    TextComponent text
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press the left arrow key if it was shorter than the 'middle' and the right arrow key if it was longer than the 'middle'
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent End_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = This concludes the experiment. Thank you for participating!
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        f.close()
  Routine end_block
    TextComponent Break_txt
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        msg = "Break time!\n\nYou've completed block " + str(block_num) + " of 5\n\nPress the \'c\' key to continue."
      End Routine:
        block_num = block_num + 1
        msg = "Break time!\n\nYou've completed block " + str(block_num) + " of 5\n\nPress the \'c\' key to continue."
    EyetrackerRecordComponent etRecord_2
      actionType = Stop Only
      stopVal [duration (s)] = 0
      syncScreenRefresh = False
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  Routine Welcome
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = height
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      text:
        Welcome to the Experiment!

        Press the spacebar to begin
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reproduce_stimulus
    PolygonComponent polygon
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 5
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Each Frame:
        remainingKeys = kb.getKeys(keyList=['space', 'escape'], waitRelease=False, clear=False)
        if remainingKeys:
            for key in remainingKeys:
                if key.duration:
                    curDuration = key.duration
                    continueRoutine=False
      End Routine:
        kb.clearEvents()
        kb.stop()
        thisExp.addData('duration', curDuration)
    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Reproduce!
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  Routine reference
    PolygonComponent polygon_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 5
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine fixation
    CodeComponent code_2
      Code Type = Py
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      Each Frame:
        line = []
        if(etRecord.pos is not None):
            line.append(etRecord.pos)
            line.append(eyetracker.getLastSample()[21])
            line.append(eyetracker.getLastSample()[40])

        if (line):
            line.append('fixation')
        else:
            line = ['None', 'None', 'None', 'None', 'fixation']
        line.append(trials.thisN)
        line.append(block_num)

        f.write(", ".join(str(i) for i in line))
        f.write('\n')
    PolygonComponent polygon_3
      fillColor = white
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 1
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 1
    innerFillColor = yellow
    innerRadius = 0.0625
    movementAnimation = True
    movementDur = 1.0
    outerRadius = .125
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine eyetracker_start
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        import csv
        block_num = 1
        filename = expInfo['participant'] + '_eyetracking_data.csv'
        f = open(filename,'w')


        #r = eyetracker.runSetupProcedure()
      Begin Routine:
        routine = 'start'
        blockClock = core.Clock()
  Routine fixation_cond
    PolygonComponent polygon_4
      fillColor = white
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
      Each Frame:
        line = []
        if(etRecord.pos is not None):
            line.append(etRecord.pos)
            line.append(eyetracker.getLastSample()[21])
            line.append(eyetracker.getLastSample()[40])

        if (line):
            line.append('fixation_cond')
        else:
            line = ['None', 'None', 'None', 'None', 'fixation_cond']
        line.append(trials.thisN + 1)
        line.append(block_num)
        line.append(blockClock.getTime())

        f.write(", ".join(str(i) for i in line))
        f.write('\n')
    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = .5
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = circle
      size = (3.6, 3.6)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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Flow
  Routine Welcome
  Routine begin
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_6.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 0.75},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_2.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 0.9343},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_15.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.1639},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_10.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.4499},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_13.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.8062},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_7.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 2.25},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_8.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 0.75},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_1.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 0.9343},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_14.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.1639},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_11.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.4499},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_3.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.8062},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_9.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 2.25},
      {'ImagePath': 'Images/0 - scenes/LCMatched_bedroom_zoom0_10.jpg', 'zoom': 0, 'scene': 'bedroom', 'dur': 0.75}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
    EyetrackerCalibrationRoutine calibration
    Routine eyetracker_start
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = blocks.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_6.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 0.75},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_2.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 0.9343},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_15.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.1639},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_10.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.4499},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_13.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.8062},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_7.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 2.25},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_8.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 0.75},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_1.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 0.9343},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_14.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.1639},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_11.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.4499},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_3.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 1.8062},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bathroom_zoom0_9.jpg', 'zoom': 0, 'scene': 'bathroom', 'dur': 2.25},
        {'ImagePath': 'Images/0 - scenes/LCMatched_bedroom_zoom0_10.jpg', 'zoom': 0, 'scene': 'bedroom', 'dur': 0.75}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
      Routine fixation_cond
      Routine image
      Routine response
    LoopTerminator trials
    Routine end_block
  LoopTerminator blocks
  Routine end
